PsychoPy2experiment version="2023.2.2"
Settings
  Audio lib = ptb
  Data filename = u'data/1_6_1_%s_%s_%s' % (expName, expInfo['编号'], expInfo['date'])
  Experiment info = {'编号': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  expName = PALT
  keyboardBackend = ioHub
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Routines
  Routine instr
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    TextComponent instr_text
      font = STSong
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        欢迎参加词语配对联想学习测验！

        在这个测验中，我将给您播放12对词，您要注意听，

        要求您记住哪两个词是连在一起的一对，

        比如我念“桌子-马车”，

        表示“桌子”和“马车”是连在一起的一对词。


        按空格键继续。
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instr_2
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    TextComponent instr_2_text
      font = STSong
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        12对词播放完毕后，就会开始测试，

        我念每对词中前面的一个词，

        要求您答出和它一对的后面一个词来，

        比如念“桌子”，您就答“马车”，听明白了么？


        按空格键继续。
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine answer1
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    SoundComponent sound_3
      sound [set every repeat] = $prompt
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    ImageComponent image_3
      image = player_icon.jpg
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    TextComponent text
      font = STSong
      letterHeight = 0.03
      pos = (0, -0.1)
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 1.0
      text = 请作答
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    MicrophoneComponent mic
      channels = auto
      device = None
      maxSize = 24000
      outputType = default
      sampleRate = DVD Audio (48kHz)
      speakTimes = True
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 5
      transcribe = False
      transcribeBackend = Google
      transcribeLang = en-US
      transcribeWhisperModel = base
      trimSilent = False
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    ImageComponent image_4
      image = mic_icon.jpg
      pos = (0, 0.1)
      size = (0.1, 0.1)
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 5
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  Routine instr_3
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    TextComponent instr_3_text
      font = STSong
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $instruction
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  Routine read2
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  Routine instr_4
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    TextComponent instr_4_text
      font = STSong
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        好，下面我读前面一个词，

        请您回答和它一对儿的后面一个词。

        请注意，每对词允许的回忆时间为5秒。

        请在看到“请作答”的提示字样后作答。


        按空格键继续。
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine S1
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    SoundComponent sound_1
      sound [set every repeat] = $sound1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    ImageComponent image
      image = player_icon.jpg
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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  Routine S2
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    SoundComponent sound_2
      sound [set every repeat] = $sound2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    ImageComponent image_2
      image = player_icon.jpg
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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  Routine interval
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    TextComponent text_2
      font = STSong
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine recall
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    TextComponent recall_text
      font = STSong
      letterHeight = 0.03
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
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      text:
        回忆结束，现在，请想一想，您刚才是用什么方法记忆这些词对的？

        您可以具体回忆一下刚才记忆成功的词对，想想您是如何记住它们的。
    TextboxComponent textbox
      bold = False
      editable = True
      font = STSong
      letterHeight = 0.05
      placeholder = 请大致描述您记忆词对的方式...
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    ButtonComponent button
      bold = False
      fillColor = -1.0000, -1.0000, 0.0902
      font = STSong
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0, -0.3)
      size = (0.1, 0.06)
      startVal [time (s)] = 0
      text = 提交
      units = height
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  Routine thanks
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    TextComponent endpage
      font = STSong
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = 实验结束，感谢您的参与！
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Flow
  Routine instr
  Routine instr_2
  LoopInitiator block loopType="TrialHandler"
    conditionsFile = zdy.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'instruction': '下面，我将播放第一遍的词对，请注意听！'},
      {'instruction': '好，下面我再把十二对词读一遍，请注意听！'},
      {'instruction': '最后，我再把十二对词读一遍，请注意听！'}]
    Routine instr_3
    LoopInitiator read1_trials loopType="TrialHandler"
      conditionsFile = read_sound.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{'sound1': 'audio/西瓜.wav', 'sound2': 'audio/衣服.wav'},
        {'sound1': 'audio/太阳.wav', 'sound2': 'audio/月亮.wav'},
        {'sound1': 'audio/困难.wav', 'sound2': 'audio/容易.wav'},
        {'sound1': 'audio/团结.wav', 'sound2': 'audio/长短.wav'},
        {'sound1': 'audio/勇敢.wav', 'sound2': 'audio/电灯.wav'},
        {'sound1': 'audio/北方.wav', 'sound2': 'audio/东方.wav'},
        {'sound1': 'audio/老师.wav', 'sound2': 'audio/铁路.wav'},
        {'sound1': 'audio/站着.wav', 'sound2': 'audio/躺下.wav'},
        {'sound1': 'audio/热心.wav', 'sound2': 'audio/玻璃.wav'},
        {'sound1': 'audio/光明.wav', 'sound2': 'audio/服从.wav'},
        {'sound1': 'audio/颜色.wav', 'sound2': 'audio/粉红.wav'},
        {'sound1': 'audio/牲口.wav', 'sound2': 'audio/牛马.wav'}]
      Routine S1
      Routine S2
      Routine interval
    LoopTerminator read1_trials
    Routine instr_4
    LoopInitiator answer1_trials loopType="TrialHandler"
      conditionsFile = answer_sound.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{'prompt': 'audio/西瓜.MP3'},
        {'prompt': 'audio/太阳.MP3'},
        {'prompt': 'audio/困难.MP3'},
        {'prompt': 'audio/团结.MP3'},
        {'prompt': 'audio/勇敢.MP3'},
        {'prompt': 'audio/北方.MP3'},
        {'prompt': 'audio/老师.MP3'},
        {'prompt': 'audio/站着.MP3'},
        {'prompt': 'audio/热心.MP3'},
        {'prompt': 'audio/光明.MP3'},
        {'prompt': 'audio/颜色.MP3'},
        {'prompt': 'audio/牲口.MP3'}]
      Routine answer1
    LoopTerminator answer1_trials
  LoopTerminator block
  Routine recall
  Routine thanks
